PsychoPy2experiment version="2023.1.3"
Settings
  Data file delimiter = comma
  Data filename = f'data/{bidsID}/{bidsID}_ses-1_task-{expName}_{expInfo["date"]}'
  Experiment info = {'session': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Save log file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1512, 982]
  color = $[-0.1765, -0.1765, -0.1765]
  expName = base
  keyboardBackend = Pyglet
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Routines
  Routine in2
    TextComponent inst2
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst2_resp.keys)=='space'
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      text:
        During this part of the experiment, you will see a picture of either an animal or tool.
        You will see this picture for a few seconds.

        Each time you see a picture of an animal or tool, I want you to tell me which category you think the picture belongs to:

        1 = animals
        2 = tools
    KeyboardComponent inst2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst2_resp.keys)=='space'
      store = nothing
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  Routine in1
    KeyboardComponent inst1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst1_resp.keys)=='space'
      store = nothing
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    TextComponent inst1
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst1_resp.keys)=='space'
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      text:
        First, please make sure your cell phone is silenced.

        We will be measuring how much you are sweating from the sensors on your hand.

        These are very sensitive to movement and posture, so please sit up straight and do not shift around in your seat or move during the experiment.

        Press SPACE to continue...
    CodeComponent input_files_code
      Code Type = Py
      Before Experiment:
        from psychopy.parallel import ParallelPort
        from subprocess import Popen
        import time
        import pandas as pd
        import os
        import numpy as np
        import random

        home_dir = os.path.expanduser('~')
        data_dir = os.path.join(home_dir, 'Desktop', 'pig', 'mrs-m', 'experiment', 'data')
        input_dir = os.path.join(home_dir,'Desktop', 'pig', 'mrs-m', 'experiment', 'stims')
        os.chdir(input_dir)

        #!/usr/bin/env python
        # Script to generate participant-specific trial orders and save input files

        import os
        import pandas as pd
        from psychopy import gui, core

        # === GUI to gather participant info ===
        dlg = gui.Dlg(title='Initialize participant')
        dlg.addField('Participant ID')
        dlg.addField('Phase order (1-4)', choices=[1, 2, 3, 4])
        dlg.addField('Room', choices=['VR', 'behavior'])
        dlg.addField('Init parallel port?', choices=['yes', 'no (testing)'])

        user_input = dlg.show()

        if dlg.OK is False:
            core.quit()

        # === Extract GUI inputs ===
        participant_id = int(user_input[0])
        order_ind = int(user_input[1])
        room_input = user_input[2]
        testing_mode = user_input[3] == 'no (testing)'

        # === Define paths ===
        bidsID = f"sub-PYG{participant_id:03d}"
        template_dir = os.path.join(home_dir, "Desktop","pig","mrs-m", "experiment", "task_templates", f"order {order_ind}")
        output_dir = os.path.join(home_dir, "Desktop","pig","mrs-m", "experiment","data", bidsID)
        os.makedirs(output_dir, exist_ok=True)

        # === Define all phase files to load and save ===
        phase_files = {
            "base": "base.csv",
            "acq": "acq.csv",
            "ext": "ext.csv",
            "recall": "recall.csv",
            "bps1": "bps1.csv",
            "bps2": "bps2.csv",
            "bps3": "bps3.csv",
            "typsource" : "typsource.csv"
        }

        psycho_columns_to_remove = [
            "trials.thisRepN", "trials.thisTrialN", "trials.thisN", "trials.thisIndex",
            "cond_trials.thisRepN", "cond_trials.thisTrialN", "cond_trials.thisN", "cond_trials.thisIndex"
        ]

        phase_dfs = {}

        for phase, filename in phase_files.items():


            if phase in ["recall", "bps1", "bps2", "bps3", "typsource"]:
                session = 2
            else:
                session = 1

            filepath = os.path.join(template_dir, filename)
            if not os.path.exists(filepath):
                raise FileNotFoundError(f"Missing input file: {filepath}")

            df = pd.read_csv(filepath)
            df = df.drop(columns=[col for col in psycho_columns_to_remove if col in df.columns])
            df.insert(0, "participant", participant_id)
            phase_dfs[phase] = df

            output_filename = f"{bidsID}_ses-{session}_task-{phase}_events-input.csv"
            output_path = os.path.join(output_dir, output_filename)
            df.to_csv(output_path, index=False)

        print(f"Participant files generated for {bidsID} in {output_dir}")




        #PARALLEL PORT CODE

        #BIO = True if user_input[4] == 'yes' else False
        testing_mode = True  # Set to False when running real experiments

        if not testing_mode:
            BIO = True if user_input[5] == 'yes' and user_input[4] == 'VR' else False
            BIO2 = True if user_input[5] == 'yes' and user_input[4] == 'behavior' else False
        else:
            BIO = False
            BIO2 = False
            logging.warn("Running in testing mode: BIO and BIO2 disabled.")

        if BIO:
            pport = ParallelPort(address='0xEFF8') #added 6/14
        elif BIO2:
            pport = ParallelPort(address='0x3FB8') #added 6/14
        else:
            class PortEmulator(object):
                def __init__(self, address=None):
                    pass
                def setData(self, data=None):
                    logging.warn("Sent data to non-existent PPort:{}".format(data))
                def setPin(self, pin, data):
                    logging.warn(f"Sent data to non-existent PPort pin: {pin}, {data}")
            pport = PortEmulator()

        pport.setData(0) #reset the pins

        def shock():
            pport.setPin(2,1)
            time.sleep(.005)
            pport.setPin(2,0)

        def stim_marker(on_or_offset='',SHOCK=False):
            if SHOCK:
                shock()
            if 'on' in on_or_offset:
                pport.setPin(4,1)
            elif 'off' in on_or_offset:
                pport.setPin(4,0)

        #CREATE INPUT FILES CODE
  Routine in3
    TextComponent inst3
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst3_resp.keys)=='space'
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      text:
        Please make a response for EVERY PICTURE. We are also measuring how fast you press the button. Please try to be as quick and accurate as possible.

        You only need to press a button when you see a picture of an animal or tool.

        Press SPACE to see what this will look like:
    KeyboardComponent inst3_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst3_resp.keys)=='space'
      store = nothing
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  Routine in4
    TextComponent inst4
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst4_resp.keys)=='space'
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      text:
        So, to recap:

        When you see a picture of an animal or a tool, press 1 or 2 to put the picture in its category. Please respond as quickly and as accurately as possible. Please make a response for every picture as soon as the picture appears on the screen.

        Any questions?
    KeyboardComponent inst4_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst4_resp.keys)=='space'
      store = nothing
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  Routine ex_iti
    KeyboardComponent ex_iti_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (ex_iti_resp.keys)=='space'
      store = nothing
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    TextComponent ex_animal_iti
      letterHeight = 0.03
      pos = (-.15,-.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (ex_iti_resp.keys)=='space'
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      text:
        1
        animals
    TextComponent ex_tool_iti
      letterHeight = 0.03
      pos = (.15,-.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (ex_iti_resp.keys)=='space'
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      text:
        2
        tools
    ImageComponent ex_crosshair
      image = stims/whitecrosshair.png
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [condition] = (ex_iti_resp.keys)=='space'
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  Routine ex_trial
    KeyboardComponent ex_trials_resp
      allowedKeys = 'num_1','num_2','1','2', '1!','2@'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = nothing
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    TextComponent ex_tool
      color [set every frame] = $ex_tool_resp_color
      letterHeight = 0.03
      pos = (.15, -.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        2
        tools
    TextComponent ex_animal
      color [set every frame] = $ex_animal_resp_color
      letterHeight = 0.03
      pos = (-.15, -.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        1
        animals
    CodeComponent col_code_ex
      Code Type = Py
      Begin Routine:
        #send the event code
        stim_marker('onset',SHOCK=False)

        #set the response colors to white
        ex_animal_resp_color = 'white'
        ex_tool_resp_color = 'white'
      Each Frame:
        #change the color of the response if one is pressed
        if '1' in ex_trials_resp.keys:
            ex_animal_resp_color = 'darkgrey'
        elif '2' in ex_trials_resp.keys:
            ex_tool_resp_color = 'darkgrey'
      End Routine:
        #send the event code
        stim_marker('offset',SHOCK=False)
    ImageComponent image
      image = stims/dummystim.jpg
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine in5
    TextComponent inst5
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst5_resp.keys)=='space'
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      text:
        PLEASE MAKE A RESPONSE ON EVERY TRIAL, even if you are just guessing.

        We are measuring how fast you press the button.

        You only need to press a button when you see a picture.

        Press SPACE to continue with the instructions...
    KeyboardComponent inst5_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst5_resp.keys)=='space'
      store = nothing
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  Routine in_6
    KeyboardComponent inst6_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst6_resp.keys)=='space'
      store = nothing
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    TextComponent inst6
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (inst6_resp.keys)=='space'
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  Routine in_begin_experiment
    TextComponent beg_exp
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (beg_exp_resp.keys)=='space'
      text = Press SPACE to begin the experiment.
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    KeyboardComponent beg_exp_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (beg_exp_resp.keys)=='space'
      store = nothing
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  Routine iti
    TextComponent ani_iti
      letterHeight = 0.03
      pos = (-.15,-.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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      text [set every repeat]:
        1
        animals
    TextComponent tool_iti
      letterHeight = 0.03
      pos = (.15,-.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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      text:
        2
        tools
    ImageComponent crosshair
      image = stims/whitecrosshair.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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  Routine trial
    CodeComponent cs_code
      Code Type = Py
      Begin Routine:
        #send the event code
        stim_marker('onset',SHOCK=False)

        #set the response colors to white
        animal_resp_color = 'white'
        tool_resp_color = 'white'
      Each Frame:
        #change the color of the response if one is pressed
        if '1' in trials_resp.keys:
            animal_resp_color = 'darkgrey'
        elif '2' in trials_resp.keys:
            tool_resp_color = 'darkgrey'
      End Routine:
        #send the event code
        stim_marker('offset',SHOCK=False)
    ImageComponent base_image
      image [set every repeat] = $stimulus
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    KeyboardComponent trials_resp
      allowedKeys = 'num_1','num_2','1!','2@','1','2'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = first key
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    TextComponent animal
      color [set every frame] = $animal_resp_color
      letterHeight = 0.03
      pos = (-.15, -.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        1
        animals
    TextComponent tool
      color [set every frame] = $tool_resp_color
      letterHeight = 0.03
      pos = (.15, -.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        2
        tools
  Routine in_end_experiment
    KeyboardComponent end_exp_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (end_exp_resp.keys)=='space'
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    TextComponent end_exp
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (end_exp_resp.keys)=='space'
      text = Experimenter press SPACE to exit the task.
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Flow
  Routine in1
  Routine in2
  Routine in3
  Routine ex_iti
  Routine ex_trial
  Routine in4
  Routine in_begin_experiment
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $f'data/{bidsID}/{bidsID}_ses-1_task-base_events-input.csv'
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('CS_type', 'CSp'), ('CS_trial', 'CSp_001'), ('category_trial', 'tool_001'), ('trial', 't_001'), ('phase', 'base'), ('mem_cond', 'sim'), ('us', 0), ('stimulus', 'stims/tools/allenwrench_simA.jpg'), ('cs_duration', 5), ('iti_duration', 6), ('counterbal_order', 'order1')]),
      OrderedDict([('CS_type', 'CSm'), ('CS_trial', 'CSm_001'), ('category_trial', 'animal_001'), ('trial', 't_002'), ('phase', 'base'), ('mem_cond', 'sim'), ('us', 0), ('stimulus', 'stims/animals/tiger_simA.jpg'), ('cs_duration', 5), ('iti_duration', 4), ('counterbal_order', 'order1')]),
      OrderedDict([('CS_type', 'CSp'), ('CS_trial', 'CSp_002'), ('category_trial', 'tool_002'), ('trial', 't_003'), ('phase', 'base'), ('mem_cond', 'sim'), ('us', 0), ('stimulus', 'stims/tools/magnifyingglass_simA.jpg'), ('cs_duration', 5), ('iti_duration', 5), ('counterbal_order', 'order1')]),
      OrderedDict([('CS_type', 'CSm'), ('CS_trial', 'CSm_002'), ('category_trial', 'animal_002'), ('trial', 't_004'), ('phase', 'base'), ('mem_cond', 'sim'), ('us', 0), ('stimulus', 'stims/animals/chicken_simA.jpg'), ('cs_duration', 5), ('iti_duration', 6), ('counterbal_order', 'order1')]),
      OrderedDict([('CS_type', 'CSm'), ('CS_trial', 'CSm_003'), ('category_trial', 'animal_003'), ('trial', 't_005'), ('phase', 'base'), ('mem_cond', 'sim'), ('us', 0), ('stimulus', 'stims/animals/penguin_simA.jpg'), ('cs_duration', 5), ('iti_duration', 5), ('counterbal_order', 'order1')])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
    Routine iti
    Routine trial
  LoopTerminator trials
  Routine in_end_experiment
