PsychoPy2experiment version="2023.1.3"
Settings
  Data filename = f'data/{bidsID}/{bidsID}_ses-1_task-{expName}_{expInfo["date"]}'
  Experiment info = {'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1512, 982]
  color = $[-0.1765, -0.1765, -0.1765]
  expName = ext
  keyboardBackend = Pyglet
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Routines
  Routine in_begin_experiment
    TextComponent beg_exp
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (beg_exp_resp.keys)=='space'
      text = Press SPACE to continue the experiment.
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    KeyboardComponent beg_exp_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (beg_exp_resp.keys)=='space'
      store = nothing
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    CodeComponent beg_exp_code
      Code Type = Py
      Before Experiment:
        from psychopy.parallel import ParallelPort
        from subprocess import Popen
        import time

        expName = 'ext'  # from the Builder filename that created this script
        dlg = gui.Dlg(title='Init participant')
        dlg.addField('participant', choices = [int(i.split('sub-PYG')[-1]) for i in os.listdir('data') if 'sub-PYG' in i])
        dlg.addField('room', choices =['VR', 'behavior']) #added 6/16
        dlg.addField('Init parallel port?', choices=['yes','no (testing)'])

        user_input = dlg.show()
        if dlg.OK == False:
            core.quit()  # user pressed cancel
        expInfo = {'participant':user_input[0]}
        bidsID = 'sub-PYG{0:0=3d}'.format(int(expInfo['participant']))

        BIO = True if user_input[2] == 'yes' and user_input[1] == 'VR' else False #added 6/14
        BIO2 = True if user_input[2] == 'yes' and user_input[1] == 'behavior' else False #added 6/14

        if BIO:
            pport = ParallelPort(address='0xEFF8') #added 6/14
        elif BIO2:
            pport = ParallelPort(address='0x3FB8') #added 6/14
        else:
            class PortEmulator(object):
                def __init__(self, address=None):
                    pass
                def setData(self, data=None):
                    logging.warn("Sent data to non-existent PPort:{}".format(data))
                def setPin(self, pin, data):
                    logging.warn(f"Sent data to non-existent PPort pin: {pin}, {data}")
            pport = PortEmulator()

        pport.setData(0) #reset the pins

        def shock():
            pport.setPin(2,1)
            time.sleep(.005)
            pport.setPin(2,0)

        def stim_marker(on_or_offset='',SHOCK=False):
            if SHOCK:
                shock()
            if 'on' in on_or_offset:
                pport.setPin(4,1)
            elif 'off' in on_or_offset:
                pport.setPin(4,0)
  Routine iti
    TextComponent iti_animals
      letterHeight = 0.03
      pos = (-.15, -.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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      text:
        1
        Yes
    TextComponent iti_tools
      letterHeight = 0.03
      pos = (.15, -.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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      text:
        2
        No
    ImageComponent crosshair
      image = stims/whitecrosshair.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
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  Routine trial
    KeyboardComponent trials_resp
      allowedKeys = 'num_1','num_2','1','2'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = first key
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    TextComponent animal
      color [set every frame] = $animal_resp_color
      letterHeight = 0.03
      pos = (-.15, -.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        1
        Yes
    TextComponent tool
      color [set every frame] = $tool_resp_color
      letterHeight = 0.03
      pos = (.15, -.325)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        2
        No
    ImageComponent ext_image
      image [set every repeat] = $stimulus
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    CodeComponent col_code
      Code Type = Py
      Begin Routine:
        #send the event code
        stim_marker('onset',SHOCK=False)

        #set the response colors to white
        animal_resp_color = 'white'
        tool_resp_color = 'white'
      Each Frame:
        #change the color of the response if one is pressed
        if '1' in trials_resp.keys:
            animal_resp_color = 'darkgrey'
        elif '2' in trials_resp.keys:
            tool_resp_color = 'darkgrey'
      End Routine:
        #send the event code
        stim_marker('offset',SHOCK=False)
  Routine in_end_experiment
    KeyboardComponent end_exp_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (end_exp_resp.keys)=='space'
      store = nothing
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    TextComponent end_exp
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = (end_exp_resp.keys)=='space'
      text = Experimenter press SPACE to exit the task.
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    CodeComponent code
      Code Type = Py
      End Experiment:
        thisExp.saveAsWideText(filename + '.csv')

        # Now do cleanup AFTER saving
        import pandas as pd
        import os
        import glob

        date = expInfo["date"]
        filename = f"data/{bidsID}/{bidsID}_ses-1_task-{expName}_{date}"

        try:
            df = pd.read_csv(filename + '.csv')
            cols_to_drop = [
                'ext_trials.thisRepN',
                'ext_trials.thisTrialN',
                'ext_trials.thisN',
                'ext_trials.thisIndex'
            ]
            df = df.drop(columns=[col for col in cols_to_drop if col in df.columns])
            df.to_csv(filename + '.csv', index=False)
        except Exception as e:
            print(f"Failed to clean data file: {e}")
  Routine cc
    ImageComponent cc_image
      image [set every repeat] = $cc_stimulus
      size = (0.8, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent cc_yes
      color [set every frame] = $cc_yescol
      letterHeight = 0.03
      pos = (-.15, -.325)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        1
        Yes
    TextComponent cc_no
      color [set every frame] = $cc_nocol
      letterHeight = 0.03
      pos = (.15, -.325)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        2
        No
    CodeComponent cc_code
      Code Type = Py
      Begin Routine:
        #send the event code
        stim_marker('onset',SHOCK=False)

        #set colors
        cc_yescol = 'dimgray'
        cc_nocol = 'dimgray'
      Each Frame:
        if cc_stimulus == 'stims/crosshair.png':
            cc_yescol = 'white'
            cc_nocol = 'white'
      End Routine:
        #send the event code
        stim_marker('offset',SHOCK=False)
Flow
  Routine in_begin_experiment
  LoopInitiator ext_trials loopType="TrialHandler"
    conditionsFile = $f'data/{bidsID}/{bidsID}_ses-1_task-ext_events-input.csv'
    loopType = sequential
    nReps = 1
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    Routine iti
    Routine trial
  LoopTerminator ext_trials
  Routine iti
  Routine in_end_experiment
